---
API: 3
OpenSesame: 4.1.8
Platform: nt
---
set width 1920
set uniform_coordinates no
set title Sampling_Rate_Experiment
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set psychopy_suppress_warnings yes
set psychopy_screen 2
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 24
set font_italic False
set font_family "Courier New"
set font_bold False
set experiment_path "C:\\Users\\LabCINC\\Documents\\Experiments\\eyelogicreading\\LITE"
set disable_garbage_collection False
set description "Sampling rate"
set coordinates relative
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi yes
set background white

define inline_script GC_sentence_trigger
	set description "Executes Python code"
	___run__
	eyetracker.send_command("record_status_message 'TRIAL TYPE %s, ITEM %d, TRIAL %d/%d'"%(var.trial_type, var.sentence_number, var.count_trial_sequence+1, 120))
	
	kb = Keyboard()
	
	t = clock.time()
	#sample() functionu ne bilmiyorum sampler() mı acaba?
	while (fixated == 0):
		gazepos = eyetracker.sample()
		x = gazepos[0]
		y = gazepos[1]
		#print(u'x is: %i, y is: %i') % (x, y)
		# this part is just optional and for diagnostics
		#if (clock.time() - t) % 250 == 0:
		#	if (x < x_right_gazetarget) & (x > x_left_gazetarget):
		#		print(u'X on target') 
		#	if (y < y_bottom_gazetarget) & (y > y_top_gazetarget):
		#		print(u'Y on target')
	
		if (x < x_right_gazetarget) & (x > x_left_gazetarget) & (y < y_bottom_gazetarget) & (y > y_top_gazetarget):
			if on_target == 0:
				on_target = 1
				fixation_start_time = clock.time()
		#		print(u'On target!')
			else:
				if (clock.time() - fixation_start_time) >= trigger_time_gazetarget:
					fixated = 1
					print(u'Passed fixation check!')
		else:
			on_target = 0
			fixated = 0
			#if (clock.time() - t) % 250 == 0:
			#	print(u'Off target! x is: %i, y is: %i, x_left is: %i, x_right is: %i, y_top is: %i, y_bottom is: %i') % (x, y, x_left_gazetarget, x_right_gazetarget, y_top_gazetarget, y_bottom_gazetarget)
		#To recalibrate the experiment press q
			key, t1 = kb.get_key(timeout=0)
			if key == 'q':
				exp.pause()
				eyetracker.stop_recording()
				eyetracker.drift_correction()
				eyetracker.start_recording()
				gazetarget_canvas.show()
	# send triggers to the eye tracker parallel port (to be changed)
	#send_trigger(CORPUS[var.corpus])
	#send_trigger(TRIAL_START)
	__end__
	___prepare__
	#Await fixation on target stimuli
	
	# how many ms until the fixation is accepted?
	trigger_time_gazetarget = 250
	
	# are we currently on target?
	on_target = 0
	# has the target been properly fixated?
	fixated = 0
	
	x = 0
	y = 0
	
	fix_start_time = 0
	__end__

define inline_script GC_trial_end
	set description "Executes Python code"
	___run__
	t_display_on = clock.time()
	
	while (trial_end_trigger_fixated == 0):
		# make sure that there is still a way to continue if this doesn't work
		#if clock.time() - t_display_on > 60000:
		#	pause()
		gazepos = eyetracker.sample()
		x = gazepos[0]
		y = gazepos[1]
	#	if (clock.time() - t) % 50 == 0:
	#		print(u'x is: %i, y is: %i, x_left is: %i, y_top is: %i') % (x, y, x_left_trialend, y_top_trialend)
	#		if (x > x_left_trialend):
	#			print(u'X on target') 
	#		if (y > y_top_trialend):
	#			print(u'Y on target')
	#
		if (x > x_left_trialend) & (y > y_top_trialend):
			if trial_end_trigger_on_target == 0:
				trial_end_trigger_on_target = 1
				fixation_start_time = clock.time()
				print(u'Lower right corner fixated!')
			else:
				if (clock.time() - fixation_start_time) >= trigger_time_trialend:
					trial_end_trigger_fixated = 1
					eyetracker.log('DISPLAY OFF')
		else:
			trial_end_trigger_on_target = 0
			trial_end_trigger_fixated = 0
			key, t2 = kb.get_key(timeout=0)
			if key == 'q':
				exp.pause()
				eyetracker.log('Trial aborted at ' + str(t2))
				break
	# send trigger to indicate end of trial
	#send_trigger(TRIAL_END)
	__end__
	___prepare__
	#Await fixation on target stimuli
	
	# how many ms until the fixation is accepted?
	trigger_time_trialend = 100
	
	# are we currently on target?
	trial_end_trigger_on_target = 0
	# has the target been properly fixated?
	trial_end_trigger_fixated = 0
	
	t = clock.time()
	
	x = 0
	y = 0
	
	fix_start_time = 0
	
	# just specify a square of 200x200 px in the bottom right corner 
	x_left_trialend = var.width * .9
	
	y_top_trialend = var.height * .9
	__end__

define inline_script Setup_Sampling_Rate
	set description "Executes Python code"
	set _run ""
	___prepare__
	# Import the necessary modules
	#from pygaze import eyetracker
	#from psychopy import visual
	#display = visual.Window(size=(800,600),monitor = 'testMonitor')
	# Create an instance of the eyetracker object
	#tracker = eyetracker.EyeTracker(display=display)
	
	# Set the desired sampling rate (in Hz): for the Eyelink Portable Duo, only 250, 500, 1000, 2000 will work
	desired_sampling_rate = 250
	
	# Connect to the eye tracker
	#eyetracker.connect()
	
	# Change the sampling rate
	eyetracker.send_command('sample_rate  = %d'%desired_sampling_rate)
	
	# set calibration
	
	eyetracker.send_command("calibration_type = HV9")
	__end__

define notepad about_this_experiment
	__note__
	Hi,
	This template already contains the basic structure needed for a typical
	eye-tracking experiment, consisting of a practice phase, followed by an
	experimental phase.
	For more information, please refer to the website:
	<http://www.cogsci.nl/opensesame>
	Have fun with OpenSesame!
	--
	Sebastiaan
	__end__
	set description "Some pointers to help you gest started!"

define sketchpad acceptability_question
	set duration 1
	set description "Displays comprehension question for trial"
	draw textline center=1 color=black font_bold=no font_family="Courier New" font_italic=no font_size=20 html=yes show_if="[freq_condition] = low" text="" x=0 y=-32 z_index=0
	draw textline center=1 color=black font_bold=no font_family="Courier New" font_italic=no font_size=20 html=yes show_if=always text="" x=-128 y=64 z_index=0
	draw textline center=1 color=black font_bold=no font_family="Courier New" font_italic=no font_size=20 html=yes show_if=always text="" x=128 y=64 z_index=0
	draw textline center=1 color=black font_bold=no font_family="Courier New" font_italic=no font_size=30 html=yes show_if=always text="[current_question]<br />" x=0 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family="Courier New" font_italic=no font_size=20 html=yes show_if=True text="SÍ" x=-192 y=64 z_index=0
	draw textline center=1 color=black font_bold=no font_family="Courier New" font_italic=no font_size=20 html=yes show_if=True text=NO x=192 y=64 z_index=0

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run reset_feedback always
	run experiment_block_loop always

define sketchpad clear_screen
	set duration 0
	set description "Just an empty sketchpad to give immediate feedback that the keypress has been registered"

define inline_script counterbalancingMODE
	set description "Executes Python code"
	___run__
	# 1. Define the 4-group modulo
	var.subject_mod4 = var.subject_nr % 4
	
	# 2. Determine which tracker is running
	if var.block_eyetracker == "EyeLogicOne":
	    var.block_number = 0
	else: 
	    var.block_number = 1
	    
	# 3. Assign block order (Fixing the variable typo here)
	if var.subject_mod4 in [0, 3]:
	    block_order = ["b1","b2"]
	else:
	    block_order = ["b2","b1"]
	    
	# 4. Final assignment
	var.current_block = block_order[var.block_number]
	__end__
	set _prepare ""

define inline_script display_sentence
	set description "Executes Python code"
	___run__
	# clear the eye tracker experimenter display
	eyetracker.send_command("clear_screen 0")
	
	eyelink_draw_sentence_boxes(word_boundaries = word_boundaries, words = words, x_offset = var.sentence_left_boundary, box_height = var.letter_height*3, box_color = 6, text_color = 2)
	
	eyetracker.send_command("draw_line %d %d %d %d %d"%(var.boundary,0,var.boundary, var.height, 3))
	
	if var.test_mode:
		# Save canvas image in test mode for visual diagnostics
		save_and_show_canvas(boundary_canvas, "E%dI%dC_%s.jpg" % (var.count_trial_sequence+1, var.sentence_number, var.freq_condition))
	else:
		boundary_canvas.show()
	
	eyetracker.log("DISPLAY ON")
	__end__
	___prepare__
	def eyelink_draw_sentence_boxes(word_boundaries, words,x_offset = 0, box_height = var.letter_height, box_color = 6, text_color = 1):
		box_coordinates_left = [x_offset] + word_boundaries[:-1]
		box_coordinates_right = word_boundaries
	
	
	
		y_top = var.height/2 - round(box_height/2)
		y_bottom = var.height/2 + round(box_height/2)
	
		for i in range(len(box_coordinates_left)):
			eyetracker.send_command("draw_box %d %d %d %d %d"%(box_coordinates_left[i],y_top,box_coordinates_right[i], y_bottom, box_color))
			eyetracker.send_command("draw_text %d %d %d %s"%(round((box_coordinates_left[i]+box_coordinates_right[i])/2*2),round((y_top+y_bottom)/2-100), text_color, words[i].encode('ascii','replace').decode()))
	__end__

define inline_script drift_correct
	set description "Executes Python code"
	___run__
	# first, a drift correction
	eyetracker.drift_correction()
	__end__
	set _prepare ""

define sketchpad end_of_exp
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="Courier New" font_italic=no font_size=30 html=yes show_if=always text="Gracias por tu participación.<br /><br />Pulsa cualquier botón para finalizar esta fase del experimento." x=0 y=0 z_index=0

define sketchpad end_of_practice_1
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Has llegado al final de la fase de práctica.<br /><br />Si tienes alguna pregunta, por favor pregunta al investigador ahora.<br /><br />Cuando estés listo para comenzar el experimento, pulsa cualquier botón para continuar." x=1 y=13 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run about_this_experiment always
	run function_save_canvas_as_image True
	run select_block always
	run set_test_mode always
	run test_mode_warning "[subject_nr] >= 999"
	run select_practice True
	run instructions always
	run clear_screen always
	run pygaze_init always
	run counterbalancingMODE always
	run practice_loop "[do_practice] == \"Sí\""
	run experimental_loop always
	run end_of_exp always

define loop experiment_block_loop
	set source_file "trials_[current_block].csv"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 trial_type experimental
	run block_sequence

define inline_script eyetracker_log_unicode
	set description "Executes Python code"
	___run__
	# logging all the variables doesn't work with this experiment as it contains non-ASCII unicode characters
	# this script replaces pygaze_log and logs all the variables, replacing non_ASCII characters with "?"
	
	for variable in var:
		if type(var.get(variable)) == str:
			eyetracker.log_var(variable, var.get(variable).encode('ascii','replace'))
		else:
			eyetracker.log_var(variable, var.get(variable))
		clock.sleep(2)
	__end__
	set _prepare ""

define inline_script function_save_canvas_as_image
	set description "Executes Python code"
	set _run ""
	___prepare__
	def save_and_show_canvas(canvas, filename):
	    import os
	    
	    # Check for valid image extension
	    if not os.path.splitext(filename)[1].lower() in ['.jpg', '.jpeg', '.png', '.bmp', '.tga']:
	        raise Exception("The filename does not have a valid image extension.")
	    
	    # Resolve absolute path
	    if not os.path.isabs(filename):
	        filename = os.path.abspath(os.path.join(var.experiment_path, filename))
	    
	    # Create subfolders if needed
	    file_dir = os.path.dirname(filename)
	    if not os.path.isdir(file_dir) and file_dir != '':
	        os.makedirs(file_dir)
	    
	    # Backend specific saving
	    if var.canvas_backend == "legacy":
	        import pygame
	        pygame.image.save(canvas.surface, filename) 
	        canvas.show()
	        
	    elif var.canvas_backend == "xpyriment":  
	        canvas._canvas.save(filename)
	        canvas.show()
	        
	    elif var.canvas_backend == "psycho":
	        try:
	            win = exp.window
	        except NameError:
	            raise Exception("The global 'exp' object is missing.")
	        
	        # 1. Store PsychoPy's original flip function
	        original_flip = win.flip
	        
	        # 2. Define a temporary 'hijacker' function
	        def hijack_flip(*args, **kwargs):
	            # The canvas is fully drawn right now. Grab the frame!
	            win.getMovieFrame(buffer='back')
	            # Save it to the drive
	            win.saveMovieFrames(filename)
	            # Clear memory
	            win.movieFrames = []
	            
	            # Immediately restore the original flip function so it only fires once
	            win.flip = original_flip
	            
	            # Complete the flip so the participant actually sees the text
	            return original_flip(*args, **kwargs)
	        
	        # 3. Swap PsychoPy's flip function with our hijacker
	        win.flip = hijack_flip
	        
	        # 4. Trigger OpenSesame's show(). This will draw all elements normally 
	        # and then call win.flip(), triggering our trap exactly at the right moment!
	        canvas.show()
	        
	    return filename
	__end__

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=Black font_bold=no font_family="Courier New" font_italic=no font_size=30 html=yes show_if=always text="En este experimento leerás y evaluarás oraciones cortas.<br /><br />Por favor, asegúrate de leer y comprender cada frase con mucho cuidado.<br /> <br />Una vez que estés seguro de haber leído y entendido las frase completamente, mira el punto en la esquina derecha de la pantalla para continuar.<br /><br />Después de terminar de leer algunas frases aparecerá una pregunta para evaluar tu comprensión lectora, responde pulsando los botones Sí o No.<br /><br />Pulsa cualquier botón para continuar." x=0 y=0 z_index=0

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad new_sketchpad
	set duration keypress
	set description "Muestra estímulos"
	draw textline center=1 color=black font_bold=no font_family="Courier New" font_italic=no font_size=24 html=yes show_if=True text="HAS HECHO 100 CAMBIO DE EYETRACKER" x=0 y=0 z_index=0

define loop practice_block_loop
	set source_file "sentences_practice.xlsx"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run trial_sequence

define sketchpad practice_instructions
	set duration keypress
	set description "practice text"
	draw textline center=1 color=black font_bold=no font_family="Courier New" font_italic=no font_size=30 html=yes show_if=always text="Las siguientes 5 oraciones son ejercicios de práctica para que te familiarices con el experimento.<br />Por favor, pregunta al experimentador si tienes alguna pregunta en cualquier momento.<br />Pulsa cualquier botón para continuar." x=0 y=0 z_index=0

define loop practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 trial_type practice
	run practice_sequence

define sequence practice_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run practice_instructions always
	run reset_feedback_1 always
	run practice_block_loop always
	run end_of_practice_1 always

define inline_script prepare_gaze_target
	set description "Executes Python code"
	set _run ""
	___prepare__
	# Gaze target coordinates
	gazetarget_height = 50
	gazetarget_width = 50
	
	x_left_gazetarget = 100
	x_right_gazetarget = x_left_gazetarget + gazetarget_width
	
	y_top_gazetarget = var.height/2 - gazetarget_height/2
	y_bottom_gazetarget = var.height/2 + gazetarget_height/2
	
	
	gazetarget_canvas = Canvas()
	
	gazetarget_canvas.rect(x_left_gazetarget + gazetarget_width/2-width/2, y_top_gazetarget +gazetarget_height/2-height/2, gazetarget_width, gazetarget_height, fill=True)
	
	#gazetarget_canvas.rect(x_left_gazetarget, y_top_gazetarget, gazetarget_width, gazetarget_height, fill=True)
	
	#gazetarget_canvas.fixdot(x = x_left_gazetarget + gazetarget_width/2, y = y_top_gazetarget + gazetarget_height/2, style = " large-open")
	
	# functions to simplify drawing on the eyelink experimenter display
	__end__

define inline_script prepare_sentences
	set description "Draw all the sentence stimuli for the trial as well as tracker view graphics for Eyelink. "
	set _run ""
	___prepare__
	# Dentro de prepare_sentences (Fase prepare), asegúrate de que empiece así:
	sentence_use = var.sentence # Esta ya es var.current_sentence.strip() definida antes
	boundary_canvas = Canvas()
	# 
	#  set up conditions
	if var.freq_condition == 'low':
		sentence_use = var.sentence_low.strip()
		var.sentence = sentence_use
		var.target = var.A1
	else: 
		sentence_use = var.sentence_high.strip()
		var.sentence = sentence_use
		var.target = var.A2
	# set up canvas (can only be done during the experiment)
	boundary_canvas = Canvas()
	
	
	var.sentence_start_x = x_left_gazetarget + gazetarget_width/2
	
	#get text coordinates from canvas
	words = var.sentence.split(" ")
	num_words = len(var.sentence.strip().split(" "))
	sentence_chars = sentence_use  # already stripped
	anchor_width = boundary_canvas.text_size("|", html=False)[0]
	def anchored_width(txt):
		return boundary_canvas.text_size("|" + txt + "|", html=False)[0] - (2 * anchor_width)
	from math import floor
	# Small correction for the right-bearing overshoot in anchored_width:
	# the trailing '|' in '|txt|' adds its left bearing to every measurement,
	# pushing all right boundaries slightly too far right.  Subtract 1% of the
	# rendered X-width (as a float) before floor() so the bias is consistently
	# removed for any font size.
	boundary_left_correction = boundary_canvas.text_size("X", html=False)[0] * 0.01
	text_left_x = var.sentence_start_x
	if len(sentence_chars) > 0:
		first_char = sentence_chars[0]
		first_right = boundary_canvas.text_size(first_char + "|", html=False)[0] - anchor_width
		first_anchored = anchored_width(first_char)
		text_left_x = var.sentence_start_x + (first_right - first_anchored)
	var.sentence_left_boundary = int(floor(text_left_x))
	
	var.pretarget = var.sentence_beginning
	pretarget_n_words = len(var.pretarget.strip().split(" "))
	var.target_word_nr = pretarget_n_words
	
	word_boundaries = []
	current_string = ""
	for word_idx, word in enumerate(words):
		current_string += word
		if word_idx < len(words) - 1:
			current_string += " "
		right_bound_px = int(floor(text_left_x + anchored_width(current_string) - boundary_left_correction))
		word_boundaries.append(right_bound_px)
	
	print(var.sentence_number)
	
	for i in range(len(words)):
		eyetracker.log("TRIAL %i ITEM %i WORD %i %s RIGHT_BOUNDARY %i"%(var.count_trial_sequence+1, var.sentence_number, i+1, words[i].encode('ascii','replace').decode(), word_boundaries[i]))
	# Log per-character right boundaries (letters only; spaces are not logged as
	# characters, but are still included in cumulative width so positions match
	# on-screen rendering exactly).
	chars_so_far = ""
	for word_idx, word in enumerate(words):
		for char_idx, ch in enumerate(word):
			chars_so_far += ch
			char_right_boundary = int(floor(text_left_x + anchored_width(chars_so_far) - boundary_left_correction))
			eyetracker.log("TRIAL %i ITEM %i WORD %i CHARACTER %i %s RIGHT_BOUNDARY %i"%(var.count_trial_sequence+1, var.sentence_number, word_idx+1, char_idx+1, ch.encode('ascii','replace').decode(), char_right_boundary))
		if word_idx < len(words) - 1:
			chars_so_far += " "
			
	# the boundary location is the first element (index 0) in the text_size tuple
	var.boundary = word_boundaries[var.target_word_nr-1] + boundary_canvas.text_size("X", html=False)[0] # the boundary is the right edge of the pre-target word, plus one X-width of buffer
	
	var.letter_height = boundary_canvas.text_size(var.sentence.replace(" ", "_"), html=False)[1]
	
	boundary_canvas.text(text = var.sentence, center = False, x = var.sentence_start_x  - width/2, html=False)
	
	# small rectangle to show participants where to look when they want to finish the sentence
	boundary_canvas.rect(round(var.width*.94)- width/2, round(var.height*.94)-height/2, round(var.width*.005),round(var.width*.005), fill = True, color = 'black')
	
	if var.test_mode:
		# FOR TESTING ONLY: Draw word boundaries on canvas to visually check rendering sizes
		canvas_y_top = var.height/2 - round((var.letter_height*3)/2) - height/2 # We adjust for uniform_coordinates=no based on Pygaze offset
		canvas_y_bottom = var.height/2 + round((var.letter_height*3)/2) - height/2
		box_coordinates_left = [var.sentence_left_boundary] + word_boundaries[:-1]
		for idx_box in range(len(box_coordinates_left)):
			left_x = box_coordinates_left[idx_box] - width/2 # Canvas offsets in legacy Pygaze for openexp canvas are shifted by width/2
			right_x = word_boundaries[idx_box] - width/2
			# draw a rectangle but unfilled just as an outline
			boundary_canvas.rect(left_x, canvas_y_top, right_x - left_x, canvas_y_bottom - canvas_y_top, fill=False, color='red')
		# FOR TESTING ONLY: Draw letter boundaries as thin blue vertical lines.
		# Measure cumulative width with a non-blank anchor ('|') appended so trailing
		# spaces are preserved in text_size() measurements.
		#
		# Also estimate a tiny first-letter left-edge correction (typically 0-2 px),
		# but keep the sentence anchor fixed so the cumulative right boundaries stay
		# aligned with the rendered text.
		for char_idx in range(len(sentence_chars)):
			measure_up_to = sentence_chars[0:char_idx + 1]
			cumulative_width = anchored_width(measure_up_to)
			letter_x = int(floor(text_left_x + cumulative_width - boundary_left_correction)) - width/2
			boundary_canvas.line(letter_x, canvas_y_top, letter_x, canvas_y_bottom, color='blue', penwidth=1)
	__end__

define pygaze_init pygaze_init
	set tracker_type EyeLogic
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate yes
	set calbeep no
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define pygaze_start_recording pygaze_start_recording
	set status_msg "start_trial [count_trial_sequence]"
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording pygaze_stop_recording
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback reset_feedback_1
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define form_multiple_choice select_block
	set timeout infinite
	set spacing 10
	set question "Experimentador: Indíque el dispositivo actual del experimento"
	set options EyeLogicLite
	set margins "50;50;50;50"
	set form_var block_eyetracker
	set form_title "Seleccionar dispositivo"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice select_practice
	set timeout infinite
	set spacing 10
	set question "Experimentador: Indíque si es necesario realizar la práctica"
	__options__
	Sí
	No
	__end__
	set margins "50;50;50;50"
	set form_var do_practice
	set form_title "Hacer la practica"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define inline_script set_test_mode
	set description "Executes Python code"
	___run__
	var.test_mode = var.subject_nr >= 999
	__end__
	set _prepare ""

define inline_script setup_condition
	set description "Executes Python code"
	set _run ""
	___prepare__
	
	if var.trial_type == 'practice':
	    var.freq_condition = 'high'
	else:
	    s_num = int(var.sentence_number)
	    if var.subject_parity == 'odd':
	        var.freq_condition = 'high' if s_num % 2 == 0 else 'low'
	    else:
	        var.freq_condition = 'low' if s_num % 2 == 0 else 'high'
	
	
	if var.freq_condition == 'low':
	    var.current_sentence = var.sentence_low
	    var.current_question = var.Q_low
	    var.current_correct_text = var.correct_low
	    var.target = var.A1
	else:
	    var.current_sentence = var.sentence_high
	    var.current_question = var.Q_high
	    var.current_correct_text = var.correct_high
	    var.target = var.A2
	
	
	var.sentence = var.current_sentence.strip()
	
	
	if var.is_Q == "YES":
	    var.has_question = "YES"
	    
	    var.correct_response = "1" if var.current_correct_text == "YES" else "2"
	else:
	    var.has_question = "NO"
	    var.correct_response = None 
	    var.current_question = "" 
	__end__

define inline_script show_gaze_target_and_driftcorrect
	set description "Display the drift correct and gaze target"
	___run__
	eyetracker.log("TRIALID I%dC_%s" % (var.sentence_number, var.freq_condition))
	
	# now show the gazetarget that we prepared before the trial
	eyetracker.send_command("clear_screen 0")
	
	eyelink_draw_gazetarget(x_left_gazetarget, y_top_gazetarget, 64, 64, 8)
	
	gazetarget_canvas.show()
	eyetracker.log("GAZE TARGET ON")
	__end__
	___prepare__
	def eyelink_draw_gazetarget(x,y,width,height,color=8):
		eyetracker.send_command("draw_filled_box %d %d %d %d %d"%(x,y,x+width, y+height, color))
	__end__

define sketchpad test_mode_warning
	set duration keypress
	set description "Notifies experimenter that test mode is active"
	draw textline center=1 color=red font_bold=yes font_family="Courier New" font_italic=no font_size=36 html=yes show_if=always text="*** MODO DE PRUEBA ACTIVO ***<br /><br />Participante n&#xBA; [subject_nr] (&gt;= 999)<br /><br />Las regiones de palabras y letras se visualizarán en pantalla<br />y cada pantalla se guardará como imagen JPG.<br /><br />Pulsa cualquier botón para continuar." x=0 y=0 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run Setup_Sampling_Rate always
	run prepare_gaze_target always
	run setup_condition always
	run prepare_sentences always
	run drift_correct always
	run pygaze_start_recording always
	run show_gaze_target_and_driftcorrect always
	run GC_sentence_trigger always
	run display_sentence always
	run GC_trial_end always
	run acceptability_question "[has_question] == \"YES\""
	run keyboard_response "[has_question] == \"YES\""
	run clear_screen always
	run logger always
	run eyetracker_log_unicode always
	run pygaze_stop_recording always

