---
API: 3
OpenSesame: 4.0.13
Platform: nt
---
set width 1920
set uniform_coordinates yes
set title "Ben Experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set psychopy_suppress_warnings yes
set psychopy_screen 1
set psychopy_monitor testMonitor
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 30
set font_italic False
set font_family "Courier New"
set font_bold True
set experiment_path "C:\\Users\\EyeTracking\\Documents\\Experiments\\ella\\opensesame"
set disable_garbage_collection False
set description "Gaze-contingent display change experiment"
set coordinates relative
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi yes
set background white

define inline_script GC_sentence_trigger
	set description "Executes Python code"
	___run__
	eyetracker.send_command("record_status_message 'TRIAL BLOCK %s, ITEM %d, CONDITION: %s, TRIAL %d/%d'"%(var.trial_type, var.sentence_number, var.preview_condition, var.count_trial_sequence+1, 220))
	
	kb = Keyboard()
	
	t = clock.time()
	#sample() functionu ne bilmiyorum sampler() mı acaba?
	while (fixated == 0):
		gazepos = eyetracker.sample()
		x = gazepos[0]
		y = gazepos[1]
		
		
		# this part is just optional and for diagnostics
		#if clock.once_in_a_while(ms = 50):
			#print(f'x is: {x}, y is: {y}')
			#if (x < x_right_gazetarget) & (x > x_left_gazetarget):
				#print(u'X on target') 
			#if (y < y_bottom_gazetarget) & (y > y_top_gazetarget):
				#print(u'Y on target')
	
		if (x < x_right_gazetarget) & (x > x_left_gazetarget) & (y < y_bottom_gazetarget) & (y > y_top_gazetarget):
			if on_target == 0:
				on_target = 1
				fixation_start_time = clock.time()
		#		print(u'On target!')
			else:
				if (clock.time() - fixation_start_time) >= trigger_time_gazetarget:
					fixated = 1
					print(u'Passed fixation check!')
		else:
			on_target = 0
			fixated = 0
		#	if (clock.time() - t) % 250 == 0:
		#		print(u'Off target! x is: %i, y is: %i, x_left is: %i, x_right is: %i, y_top is: %i, y_bottom is: %i') % (x, y, x_left_gazetarget, x_right_gazetarget, y_top_gazetarget, y_bottom_gazetarget)
		#To recalibrate the experiment press q
			key, t1 = kb.get_key(timeout=0)
			if key == 'q':
				exp.pause()
				eyetracker.stop_recording()
				eyetracker.drift_correction()
				eyetracker.start_recording()
				gazetarget_canvas.show()
	# send triggers to the eye tracker parallel port (to be changed)
	#send_trigger(CORPUS[var.corpus])
	#send_trigger(TRIAL_START)
	__end__
	___prepare__
	#Await fixation on target stimuli
	
	# how many ms until the fixation is accepted?
	trigger_time_gazetarget = 250
	
	# are we currently on target?
	on_target = 0
	# has the target been properly fixated?
	fixated = 0
	
	x = 0
	y = 0
	
	fix_start_time = 0
	__end__

define inline_script GC_trial_end
	set description "Executes Python code"
	___run__
	t_display_on = clock.time()
	
	while (trial_end_trigger_fixated == 0):
		# make sure that there is still a way to continue if this doesn't work
		#if clock.time() - t_display_on > 60000:
		#	pause()
		gazepos = eyetracker.sample()
		x = gazepos[0]
		y = gazepos[1]
	#	if (clock.time() - t) % 50 == 0:
	#		print(u'x is: %i, y is: %i, x_left is: %i, y_top is: %i') % (x, y, x_left_trialend, y_top_trialend)
	#		if (x > x_left_trialend):
	#			print(u'X on target') 
	#		if (y > y_top_trialend):
	#			print(u'Y on target')
	#
		if (x > x_left_trialend) & (y > y_top_trialend):
			if trial_end_trigger_on_target == 0:
				trial_end_trigger_on_target = 1
				fixation_start_time = clock.time()
				print(u'Lower right corner fixated!')
			else:
				if (clock.time() - fixation_start_time) >= trigger_time_trialend:
					trial_end_trigger_fixated = 1
					eyetracker.log('DISPLAY OFF')
		else:
			trial_end_trigger_on_target = 0
			trial_end_trigger_fixated = 0
			key, t2 = kb.get_key(timeout=0)
			if key == 'q':
				exp.pause()
				eyetracker.log('Trial aborted at ' + str(t2))
				break
	# send trigger to indicate end of trial
	#send_trigger(TRIAL_END)
	__end__
	___prepare__
	#Await fixation on target stimuli
	
	# how many ms until the fixation is accepted?
	trigger_time_trialend = 100
	
	# are we currently on target?
	trial_end_trigger_on_target = 0
	# has the target been properly fixated?
	trial_end_trigger_fixated = 0
	
	t = clock.time()
	
	x = 0
	y = 0
	
	fix_start_time = 0
	
	# just specify a square of 200x200 px in the bottom right corner 
	x_left_trialend = var.width * .9
	
	y_top_trialend = var.height * .9
	__end__

define sketchpad Gaze_target
	set duration 0
	set description "Displays the gaze-contingent trigger rectangle"
	draw rect color=black fill=1 h=64 penwidth=1 show_if=always w=64 x=-800 y=-32 z_index=0

define sketchpad Sentence
	set start_response_interval no
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw textline center=0 color=black font_bold=no font_family="Courier New" font_italic=no font_size=24 html=yes show_if=always text="[pretarget] [target] [posttarget]" x=-800 y=-15 z_index=0
	draw rect color=black fill=1 h=2 penwidth=1 show_if=always w=2 x=768 y=480 z_index=0

define notepad about_this_experiment
	__note__
	Hi,
	This template already contains the basic structure needed for a typical
	eye-tracking experiment, consisting of a practice phase, followed by an
	experimental phase.
	For more information, please refer to the website:
	<http://www.cogsci.nl/opensesame>
	Have fun with OpenSesame!
	--
	Sebastiaan
	__end__
	set description "Some pointers to help you gest started!"

define loop block_loop
	set source_file "ella[trial_type].xlsx"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run reset_feedback always
	run block_loop always

define sketchpad break_instr
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Ahora puede hacer una pausa.<br /><br />Pulse CUALQUIER botón para continuar." x=0 y=0 z_index=0

define sketchpad break_instr_1
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Şimdi biraz mola verebilirsiniz.<br /><br />Devam etmek için HERHANGİ bir tuşa basınız." x=0 y=0 z_index=0

define sketchpad break_instr_2
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Ahora puede hacer una pausa.<br /><br />Pulse CUALQUIER botón para continuar." x=0 y=0 z_index=0

define sketchpad clear_screen
	set duration 0
	set description "Just an empty sketchpad to give immediate feedback that the keypress has been registered"

define sketchpad comprehension_question
	set duration 0
	set description "Displays comprehension question for trial"
	draw textline center=1 color=black font_bold=no font_family="Courier New" font_italic=no font_size=24 html=yes show_if=always text="[question]" x=0 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family="Courier New" font_italic=no font_size=24 html=yes show_if=always text="<span style='color:rgba(0,0,0,.01)'>gb</span>SI" x=-128 y=64 z_index=0
	draw textline center=1 color=black font_bold=no font_family="Courier New" font_italic=no font_size=24 html=yes show_if=always text="<span style='color:rgba(0,0,0,.01)'>gb</span>NO" x=128 y=64 z_index=0

define inline_script counterbalancingMODE
	set description "Executes Python code"
	set _run ""
	___prepare__
	var.subject_mode = var.subject_nr % 3 
	
	    
	if var.subject_mode == 1:
	    b1 = "1A"
	    b2 = "2A"
	    b3 = "3A"
	elif var.subject_mode == 2:
	    b1 = "2A"
	    b2 = "3A"
	    b3 = "1A"
	else:
	    b1 = "3A"
	    b2 = "1A"
	    b3 = "2A"
	    
	print(b1)
	__end__

define inline_script display_sentence_and_display_change
	set description "Executes Python code"
	___run__
	# clear the eye tracker experimenter display
	eyetracker.send_command("clear_screen 0")
	
	eyelink_draw_sentence_boxes(word_boundaries = word_boundaries, words = words, x_offset = var.sentence_start_x, box_height = var.letter_height*3, box_color = 6, text_color = 2)
	
	eyetracker.send_command("draw_line %d %d %d %d %d"%(var.boundary,0,var.boundary, var.height, 3))
	
	# FOR TESTING: actually draw the boundary on the canvas
	#pre_boundary_canvas.line(var.boundary,0,var.boundary, var.height)
	
	pre_boundary_canvas.show()
	
	eyetracker.log("DISPLAY ON")
	
	boundary_crossed = False
	
	while (boundary_crossed == False):
		# make sure that there is still a way to continue if this doesn't work
		#if clock.time() - t_display_on > 60000:
		#	pause()
		gazepos = eyetracker.sample()
		x = gazepos[0]
		y = gazepos[1]
	#	if (clock.time() - t) % 50 == 0:
	#		print(u'x is: %i, y is: %i, x_left is: %i, y_top is: %i') % (x, y, x_left_trialend, y_top_trialend)
	#		if (x > x_left_trialend):
	#			print(u'X on target') 
	#		if (y > y_top_trialend):
	#			print(u'Y on target')
	#
		if (x > var.boundary):
			eyetracker.log('DC started')
			t_pre_change = clock.time()
			t_post_change = post_boundary_canvas.show()
			dc_delay = t_post_change - t_pre_change
			eyetracker.log('DC completed. Time: ' + str(dc_delay) + ' ms.')
			boundary_crossed = True
			
			
		else:			
			key, t2 = kb.get_key(timeout=0)
			if key == 'q':
				exp.pause()
				eyetracker.log('Trial aborted at ' + str(t2))
				break
	# send trigger to indicate end of trial
	#send_trigger(TRIAL_END)
	__end__
	___prepare__
	def eyelink_draw_sentence_boxes(word_boundaries, words,x_offset = 0, box_height = var.letter_height, box_color = 6, text_color = 1):
		box_coordinates_left = [x_offset] + word_boundaries[:-1]
		box_coordinates_right = word_boundaries
		
		
		
		y_top = var.height/2 - round(box_height/2)
		y_bottom = var.height/2 + round(box_height/2)
		
		for i in range(len(box_coordinates_left)):
			eyetracker.send_command("draw_box %d %d %d %d %d"%(box_coordinates_left[i],y_top,box_coordinates_right[i], y_bottom, box_color))
			eyetracker.send_command("draw_text %d %d %d %s"%(round((box_coordinates_left[i]+box_coordinates_right[i])/2*2),round((y_top+y_bottom)/2-100), text_color, words[i].encode('ascii','replace').decode()))
	__end__

define inline_script drift_correct
	set description "Executes Python code"
	___run__
	# first, a drift correction
	eyetracker.drift_correction()
	__end__
	set _prepare ""

define sketchpad end_of_exp
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="Courier New" font_italic=no font_size=20 html=yes show_if=always text="El experimento ha concluido.<br /><br />Gracias por su participación.<br /><br />Pulse CUALQUIER botón para finalizar el experimento." x=0 y=0 z_index=0

define sketchpad end_of_practice
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Has llegado al final de la práctica.<br /><br />Si tienes alguna duda, puedes preguntar ahora al/a investigador/a.<br /><br />Cuando estés listo/a para iniciar el experimento, pulsa CUALQUIER BOTÓN para continuar." x=1 y=13 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run about_this_experiment always
	run instructions always
	run clear_screen always
	run pygaze_init always
	run counterbalancingMODE always
	run practice_loop always
	run end_of_practice always
	run experimental_loop_1 always
	run break_instr always
	run experimental_loop_2 always
	run break_instr_2 always
	run experimental_loop_3 always
	run end_of_exp always

define loop experimental_loop_1
	set source_file "Spanish Sentences [trial_type].xlsx"
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if False
	setcycle 0 trial_type "[b1]"
	run block_sequence

define loop experimental_loop_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 trial_type "[b2]"
	run block_sequence

define loop experimental_loop_3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 trial_type "[b3]"
	run block_sequence

define inline_script eyetracker_log_unicode
	set description "Executes Python code"
	___run__
	# logging all the variables doesn't work with this experiment as it contains non-ASCII unicode characters
	# this script replaces pygaze_log and logs all the variables, replacing non_ASCII characters with "?"
	
	for variable in var:
		if type(var.get(variable)) == str:
			eyetracker.log_var(variable, var.get(variable).encode('ascii','replace').decode())
		else:
			eyetracker.log_var(variable, var.get(variable))
		clock.sleep(2)
	__end__
	set _prepare ""

define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your average response time was [avg_rt]ms" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue" x=0 y=32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your accuracy was [acc]%" x=0 y=-32 z_index=0
	draw textline center=1 color=black font_bold=no font_family="Courier New" font_italic=no font_size=18 html=yes show_if=always text="Deine Antworten waren zu [acc]% korrekt.<br /><br />Weiter mit einer beliebigen Taste." x=0 y=0 z_index=0

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=Black font_bold=no font_family="Courier New" font_italic=no font_size=18 html=yes show_if=always text="En este experimento leerás frases cortas.<br /><br />Por favor, asegúrate de leer y entender las frases con atención.<br /> <br />Cuando estés seguro/a de haber leído y comprendido las frases, mira el punto situado en la esquina derecha de la pantalla para continuar.<br /><br />Después de algunas frases, puede haber preguntas relacionadas con la frase que has leído.<br /><br />Utiliza los botones laterales para responder a estas preguntas:<br /><br />SÍ = Botón izquierdo<br />NO = Botón derecho<br /><br />Pulse CUALQUIER BOTÓN para continuar." x=0 y=0 z_index=0

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[correct_button]"
	set allowed_responses "1;2"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define feedback new_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family="Courier New" font_italic=no font_size=18 html=yes show_if=always text="[question]<br /><br />[answer1]         [answer2]<br />" x=0 y=0 z_index=0

define pygaze_wait new_pygaze_wait
	set event "Fixation start"
	set description "Waits for an eye-tracker event"

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="Courier New" font_italic=no font_size=20 html=yes show_if=always text="sentence<br />" x=-672 y=-64 z_index=0

define loop practice_loop
	set source_file "Spanish Sentences [trial_type].xlsx"
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if "subject_nr > 998"
	setcycle 0 trial_type prac
	run block_sequence

define inline_script prepare_gaze_target
	set description "Executes Python code"
	set _run ""
	___prepare__
	# Gaze target coordinates
	gazetarget_height = 50
	gazetarget_width = 50
	
	x_left_gazetarget = 100
	x_right_gazetarget = x_left_gazetarget + gazetarget_width
	
	y_top_gazetarget = var.height/2 - gazetarget_height/2
	y_bottom_gazetarget = var.height/2 + gazetarget_height/2
	
	
	gazetarget_canvas = Canvas()
	
	gazetarget_canvas.rect(x_left_gazetarget + gazetarget_width/2-width/2, y_top_gazetarget +gazetarget_height/2-height/2, gazetarget_width, gazetarget_height, fill=True)
	
	#gazetarget_canvas.rect(-800,0,gazetarget_width,gazetarget_height, fill=True)
	
	
	#print(x_left_gazetarget + gazetarget_width/2-width/2)
	# functions to simplify drawing on the eyelink experimenter display
	__end__

define inline_script prepare_sentences
	set description "Draw all the sentence stimuli for the trial as well as tracker view graphics for Eyelink. "
	set _run ""
	___prepare__
	# set up conditions
	# add a full stop to the last word if there is none
	# this ensures that every sentence ends with the correct punctuation 
	#(cumle sonu nokta bakıyo)
	if var.posttarget[-1:] != ".":
		var.posttarget = "".join([var.posttarget, '.'])
		current_posttarget = var.posttarget
	else:
		current_posttarget = var.posttarget
	
	# when making the sentence strings, make sure to remove trailing and leading spaces using .strip()
	
	if var.preview_condition == 'dissimilar':
		pre_boundary_sentence = ' '.join([var.pretarget.strip(), var.changed.strip(), current_posttarget.strip()])
	else:
		pre_boundary_sentence = ' '.join([var.pretarget.strip(), var.target.strip(), current_posttarget.strip()])
		
	post_boundary_sentence = ' '.join([var.pretarget.strip(), var.target.strip(), current_posttarget.strip()])
	
	var.sentence_start_x = x_left_gazetarget + gazetarget_width/2
	
	# set up canvases (can only be done during the experiment)
	
	pre_boundary_canvas = Canvas()
	post_boundary_canvas = Canvas()
	
	def get_right_word_boundary(sentence_string, word_nr, x_offset):
		words = sentence_string.split(" ")
		string_up_to_word = " ".join(words[0:(word_nr+1)])# needs to be word_nr + 1 because Python ranges don't include the end point
		return pre_boundary_canvas.text_size(string_up_to_word)[0] + x_offset
	
	
		
	#get text coordinates from canvas
	pretarget_n_words = len(var.pretarget.strip().split(" "))
	posttarget_n_words = len(current_posttarget.strip().split(" "))
	
	var.target_word_nr = pretarget_n_words
	# boundry bi aralık list ondan
	word_boundaries = list(map(lambda word_nr : get_right_word_boundary(post_boundary_sentence, word_nr, var.sentence_start_x), range(0, pretarget_n_words + 1 + posttarget_n_words)))
	
	words = post_boundary_sentence.split(" ")
	
	# write words and word boundaries to EDF file
	# replace any non-ASCII letters with '?'
	# it's probably not a good idea to try to write unicode letters to an EDF file... 
	# 
	# len = boyut for i in = her eleman için yap
	for i in range(len(words)):
		eyetracker.log("TRIAL %i ITEM %i WORD %i %s RIGHT_BOUNDARY %i"%(var.count_trial_sequence, var.sentence_number, i+1, words[i].encode('ascii','replace').decode(), word_boundaries[i]))
	
	# add Eyetrack-style character regions (these include trial and item information too for easier processing, but this can be removed if necessary for compatibility
	
	#for i in range(len(post_boundary_sentence)):
		#eyetracker.log("REGION CHAR %i 1 %s %i 0 %i %i TRIAL %i ITEM %i"%(i, post_boundary_sentence[i].encode('ascii','replace'), pre_boundary_canvas.text_size(post_boundary_sentence.replace(" ", "_")[:i])[0] + var.sentence_start_x, pre_boundary_canvas.text_size(post_boundary_sentence.replace(" ", "_")[:i+1])[0] + var.sentence_start_x, var.width, var.count_trial_sequence, var.sentence_number))
	
	
	# the boundary location is the first element (index 0) in the text_size tuple
	var.boundary = word_boundaries[var.target_word_nr-1] + pre_boundary_canvas.text_size("X")[0]*.4 # the boundary is the right boundary of the pre-target word but add some space (the equivalent of the letter X) to reduce the risk that participants trigger it accidentally
	#= pre_boundary_canvas.text_size(var.pretarget)[0] + var.sentence_start_x
	
	var.letter_height = pre_boundary_canvas.text_size(var.pretarget)[1]
	
	pre_boundary_canvas.text(text = pre_boundary_sentence, center = False, x = var.sentence_start_x - width/2)
	
	# small rectangle to show participants where to look when they want to finish the sentence
	pre_boundary_canvas.rect(round(var.width*.94)-width/2, round(var.height*.94)-height/2, round(var.width*.005),round(var.width*.005), fill = True, color = 'black')
	#for current_boundary in word_boundaries:
	#	pre_boundary_canvas.line(sx = current_boundary, sy = 0, ex = current_boundary, ey = var.height, color = 'green')
	
	#pre_boundary_canvas.line(sx = var.boundary - width/2, sy = 0-height/2, ex = var.boundary - width/2, ey = height/2, color = 'red')
	
	post_boundary_canvas.text(text = post_boundary_sentence, center = False, x = var.sentence_start_x - width/2)
	
	# small rectangle to show participants where to look when they want to finish the sentence
	post_boundary_canvas.rect(round(var.width*.94)- width/2, round(var.height*.94)-height/2, round(var.width*.005),round(var.width*.005), fill = True, color = 'black')
	__end__

define pygaze_drift_correct pygaze_drift_correct
	set ypos 540
	set xpos 960
	set target_style "large-open"
	set target_color "[foreground]"
	set fixation_triggered no
	set draw_target yes
	set description "Perform eye-tracker drift correction"

define pygaze_init pygaze_init
	set tracker_type EyeLink
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define pygaze_log pygaze_log
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_start_recording pygaze_start_recording
	set status_msg "start_trial [count_trial_sequence]"
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording pygaze_stop_recording
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define inline_script send_end_trigger
	set description "Executes Python code"
	___run__
	send_trigger(SESSION_END)
	__end__
	set _prepare ""

define inline_script send_session_end_trigger
	set description "Executes Python code"
	___run__
	if var.trial_type == "practice":
		send_trigger(PRACTICE_END)
	else:
		send_trigger(EXPT_END)
	__end__
	set _prepare ""

define inline_script send_start_trigger
	set description "Executes Python code"
	___run__
	if var.trial_type == "practice":
		send_trigger(PRACTICE_START)
	else:
		send_trigger(EXPT_START)
	__end__
	set _prepare ""

define inline_script set_up_triggers
	set description "Send trigger for experiment onset"
	set _run "send_trigger(SESSION_START)"
	___prepare__
	INIT = 0 # Initialize/reset
	
	## Conditions
	CORPUS = {'Fuzzy2': 1, 'Grabbag': 2, 'NRX-Filler': 3, 'NRX': 4}
	#CRTLATE  = {'a': 5, 'b': 6, 'c': 7}
	
	#ADJEARLY = {'a':  7, 'b':  8, 'c':  9}
	#ADJLATE  = {'a': 10, 'b': 11, 'c': 12}
	
	SESSION_START = 254
	SESSION_END = 255
	
	PRACTICE_START = 252
	PRACTICE_END = 253
	
	TRIAL_START = 250
	TRIAL_END = 251
	
	EXP_ONSET = 248
	EXP_OFFSET = 249
	
	NEXP_ONSET = 240
	NEXP_OFFSET = 241
	
	QUESTION_ONSET = 246
	QUESTION_OFFSET = 247
	
	EXPT_START = 244
	EXPT_END = 245
	
	BREAK_START = 242
	BREAK_STOP = 243
	
	CALIBRATION_START = 230
	CALIBRATION_FIX = 231
	CALIBRATION_END = 232
	
	def send_trigger(trigger, delay=20, reset=True, direct = False):
	# send trigger
		if not direct:
			eyetracker.send_command('write_ioport 0x378 %s' % trigger)
		if direct:
		  ctypes.windll.inpout32.Out32(0x378, trigger)
		print '#', trigger
	
		## Reset parallel port
		if reset:
			self.sleep(delay)
		if not direct:
			eyetracker.send_command('write_ioport 0x378 %s' % INIT)
		if direct:
			ctypes.windll.inpout32.Out32(0x378, INIT)
		if delay > 0:
		  self.sleep(delay)
	__end__

define inline_script setup
	set description "Executes Python code"
	set _run ""
	set _prepare "letter_size = 11 # in pixels: 11 for courier new 14 pt"

define inline_script setup_condition
	set description "Executes Python code"
	set _run ""
	___prepare__
	# determine the condition for each item
	# odd subject numbers see even sentences in the "ben" condition and odd sentences in the control condition
	# odd subject numbers see odd sentences in the "ben" condition and even sentences in the control condition
	# practice trials are always in the identical condition
	print(sentence_number)
	if var.trial_type == 'practice':
		var.preview_condition = 'identical'
	else:
		if var.subject_parity == 'odd':
			if var.sentence_number % 2 == 0: # even
				var.preview_condition = 'dissimilar'
			else:
				var.preview_condition = 'identical'
		else:
			if var.sentence_number % 2 == 0: # even
				var.preview_condition = 'identical'
			else:
				var.preview_condition = 'dissimilar'
			
	#also check which one is the correct response
	
	if var.answer == "SI":
		var.correct_button = "1"
	else:
		if var.answer == "NO":
			var.correct_button = "2"
		else:
			var.correct_button = "NA"
	
	desired_sampling_rate = 1000
	
	eyetracker.send_command('sample_rate = %d'%desired_sampling_rate)
	
	eyetracker.send_command("calibration_type = HV9")
	__end__

define inline_script show_gaze_target_and_driftcorrect
	set description "Display the drift correct and gaze target"
	___run__
	eyetracker.log("TRIALID I%dC_%s" % (var.sentence_number, var.preview_condition))
	
	# now show the gazetarget that we prepared before the trial
	eyetracker.send_command("clear_screen 0")
	
	eyelink_draw_gazetarget(x_left_gazetarget, y_top_gazetarget, 64, 64, 8)
	
	gazetarget_canvas.show()
	eyetracker.log("GAZE TARGET ON")
	__end__
	___prepare__
	def eyelink_draw_gazetarget(x,y,width,height,color=8):
		eyetracker.send_command("draw_filled_box %d %d %d %d %d"%(x,y,x+width, y+height, color))
	__end__

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run setup_condition always
	run prepare_gaze_target always
	run prepare_sentences always
	run drift_correct always
	run pygaze_start_recording always
	run show_gaze_target_and_driftcorrect always
	run GC_sentence_trigger always
	run display_sentence_and_display_change always
	run GC_trial_end always
	run comprehension_question "[question] != \"NA\""
	run keyboard_response "[question] != \"NA\""
	run clear_screen always
	run logger always
	run eyetracker_log_unicode always
	run pygaze_stop_recording always

