---
API: 3
Title: Reading with and without commas
Description: Sentence reading: the published comma study (Angele et al.)
OpenSesame: 4.1.0
Platform: posix
---
set width 1920
set height 1080
set uniform_coordinates yes
set transparent_variables no
set title "Reading with and without commas"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set color_backend legacy
set canvas_backend legacy
set clock_backend legacy
set sampler_backend legacy
set fullscreen no
set font_size 24
set font_family mono
set font_bold no
set font_italic no
set font_underline no
set foreground black
set background white
set bidi no
set compensation 0
set coordinates relative
set description "Sentence reading: the published comma study (Angele et al.)"
set n_trials 138
set gaze_target_left 100
set yes_label "SÍ"
set no_label "NO"
set screen_width_cm 53
set viewing_distance_cm 70
set validation_threshold 1.0
set fixation_triggered_drift_check no
define sequence experiment
	set flush_keyboard yes
	set description "Main sequence"
	run pygaze_init always
	run setup_helpers always
	run eyelink_setup always
	run validate_calibration always
	run instructions always
	run practice_loop always
	run end_of_practice always
	run experimental_loop_1 always
	run break_instr always
	run experimental_loop_2 always
	run goodbye always

define sequence trial_sequence
	set flush_keyboard yes
	set description "One trial"
	run setup_condition always
	run prepare_trial always
	run drift_correct always
	run eyelink_trial_start always
	run start_recording always
	run log_trial always
	run show_gaze_target always
	run trial_display always
	run comprehension_question "question != 'NA' and trial_aborted == 0"
	run keyboard_response "question != 'NA' and trial_aborted == 0"
	run clear_screen always
	run logger always
	run stop_recording always
	run eyelink_trial_end always

define pygaze_init pygaze_init
	set tracker_type "Advanced dummy (mouse simulation)"
	set calibrate yes
	set calbeep no
	set _logfile automatic
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set eyelink_force_drift_correct yes
	set eyelink_pupil_size_mode area
	set smi_ip 127.0.0.1
	set smi_send_port 4444
	set smi_recv_port 5555
	set tobiiglasses_address 192.168.71.50
	set tobiiglasses_udpport 49152
	set description "Initialize and calibrate the eye tracker (advanced dummy: mouse = gaze)"

define pygaze_drift_correct drift_correct
	set xpos 0
	set ypos 0
	set fixation_triggered "{fixation_triggered_drift_check}"
	set target_color black
	set target_style default
	set draw_target yes
	set description "Drift correction at screen centre (fixation-triggered if fixation_triggered_drift_check = yes)"

define pygaze_start_recording start_recording
	set status_msg "trial {count_trial_sequence + 1}/{n_trials} item {item} {condition}"
	set description "Start recording; the status message is shown on the EyeLink Host PC"

define pygaze_stop_recording stop_recording
	set status_msg stop_trial
	set description "Stop recording"

define pygaze_log log_trial
	set throttle 2
	set auto_log no
	set msg "TRIALINFO item={item}"
	set description "Log trial info"

define logger logger
	set description "Default logger"
	set auto_log yes

define inline_script setup_helpers
	set description "Define shared geometry, gaze and validation helpers"
	___prepare__

	__end__
	___run__
	import bisect
	import math
	from openexp.canvas import Canvas
	from openexp.keyboard import Keyboard

	W, H = var.width, var.height

	GAZE_SIZE = 50
	GAZE_LEFT = int(var.gaze_target_left)
	SENTENCE_LEFT = GAZE_LEFT + GAZE_SIZE // 2   # sentence starts in the target
	CORNER_X = int(W * .9)
	CORNER_Y = int(H * .9)
	CORNER_SIZE = max(6, int(W * .005))

	_probe = Canvas(exp)                         # for measuring text
	TEXT_H = _probe.text_size('x')[1]
	TEXT_TOP = -TEXT_H // 2                      # vertically centre the line

	# Canvas.text_size() does NOT return the space that a text takes up on the
	# screen: OpenSesame renders the text and returns the size of the *inked*
	# pixels only. So
	#   - trailing spaces are not counted: text_size('El ') == text_size('El');
	#   - with center=True (the default) the empty pixels left of the first letter
	#     and right of the last letter are not counted either, so the width
	#     depends on which letters a text starts and ends with.
	# Measuring prefixes of a sentence with text_size() therefore puts letter and
	# word boundaries several pixels (up to ~0.7 letter) too far to the left.
	# The correct measurement:
	#   - center=False: measure from the drawing position, not from the first ink;
	#   - add a '|' at the end and subtract the width of '|' alone: the empty
	#     pixels after the last letter (and any spaces) are then counted exactly.
	#   - give max_width = screen width: otherwise text wider than half the screen is
	#     wrapped onto a second line and measured as two short lines.
	# Qt draws text a few pixels to the right of the x you give it (the margin of
	# its text document); the first letter starts there.
	from qtpy.QtGui import QTextDocument

	TEXT_MARGIN = QTextDocument().documentMargin()


	def _inked_width(txt):
	    return _probe.text_size(txt, center=False, html=False, max_width=W)[0]


	_BAR = _inked_width('|')


	def text_width(txt):
	    """Horizontal space that `txt` takes up on the screen, in pixels."""
	    return _inked_width(txt + '|') - _BAR


	def letter_edges(sentence):
	    """Screen x of the left edge of every character of `sentence`, followed
	    by the right edge of the last character (len(sentence) + 1 values)."""
	    left = SENTENCE_LEFT + TEXT_MARGIN
	    return [left] + [left + text_width(sentence[:k])
	                     for k in range(1, len(sentence) + 1)]


	# Experimenter keys while waiting for gaze: Escape = pause, C = re-calibrate.
	kb = Keyboard(exp, keylist=['escape', 'c'], timeout=0)

	# Interest areas of the current trial: (label, left, top, right, bottom) in
	# screen pixels, and the x of every letter edge (see letter_edges()). Every
	# prepare_trial script sets them.
	interest_areas = []
	letter_x = []


	def ascii_safe(text):
	    """Tracker data files (EDF) do not like non-ASCII characters."""
	    return str(text).encode('ascii', 'replace').decode().replace(' ', '_')


	def add_corner(c):
	    """Draw the small square that participants fixate to end the trial."""
	    c.rect(int(W * .94) - W // 2, int(H * .94) - H // 2,
	           CORNER_SIZE, CORNER_SIZE, fill=True, color='black')


	def text_canvas(txt):
	    """Left-aligned sentence starting inside the gaze target, vertically centred."""
	    c = Canvas(exp)
	    c.text(txt, center=False, x=SENTENCE_LEFT - W // 2, y=TEXT_TOP,
	           color='black', html=False)
	    add_corner(c)
	    return c


	def gaze_char(x):
	    """Index of the character at screen x (uses letter_x of this trial)."""
	    i = bisect.bisect_right(letter_x, x) - 1
	    return min(max(i, 0), len(letter_x) - 2)


	def word_areas(sentence, edges):
	    """One interest area per word, one text line above and below; `edges`
	    comes from letter_edges(sentence). The areas touch: the space after a
	    word belongs to that word."""
	    areas = []
	    start = 0
	    for word in sentence.split(' '):
	        end = min(start + len(word) + 1, len(sentence))   # incl. the space
	        areas.append((word, round(edges[start]), H // 2 - TEXT_H,
	                      round(edges[end]), H // 2 + TEXT_H))
	        start += len(word) + 1
	    return areas


	def log_interest_areas():
	    """Write the interest areas (words or pictures) and, for sentences, the
	    position of every letter to the tracker data file."""
	    for n, (label, left, top, right, bottom) in enumerate(interest_areas, 1):
	        eyetracker.log('REGION n=%d label=%s left=%d top=%d right=%d bottom=%d'
	                       % (n, ascii_safe(label), left, top, right, bottom))
	    word, n = 1, 0
	    for k, ch in enumerate(var.get('sentence', '') if letter_x else ''):
	        if ch == ' ':
	            word, n = word + 1, 0
	            continue
	        n += 1
	        eyetracker.log('LETTER word=%d n=%d char=%s left=%d right=%d'
	                       % (word, n, ascii_safe(ch), round(letter_x[k]),
	                          round(letter_x[k + 1])))


	def on_gaze_target(x, y):
	    return (GAZE_LEFT <= x <= GAZE_LEFT + GAZE_SIZE and
	            H / 2 - GAZE_SIZE / 2 <= y <= H / 2 + GAZE_SIZE / 2)


	def on_corner(x, y):
	    return x > CORNER_X and y > CORNER_Y


	def wait_for_fixation(region, duration, timeout=None, keys=('escape',)):
	    """Wait until gaze stays inside `region` for `duration` ms.

	    Returns 'fixated', 'timeout', or the key in `keys` that was pressed.
	    Escape first shows OpenSesame's pause screen (Space = resume, Q = quit);
	    'escape' is returned after the experimenter resumes.
	    """
	    t0 = clock.time()
	    since = None
	    while True:
	        x, y = eyetracker.sample()
	        if region(x, y):
	            if since is None:
	                since = clock.time()
	            elif clock.time() - since >= duration:
	                return 'fixated'
	        else:
	            since = None
	        key, _ = kb.get_key(keylist=list(keys), timeout=0)
	        if key is not None:
	            return key
	        if timeout is not None and clock.time() - t0 >= timeout:
	            return 'timeout'
	        clock.sleep(5)


	def end_trial_at_corner():
	    """End the trial when the corner square is fixated for 100 ms.

	    Escape aborts the trial (the comprehension question is then skipped).
	    """
	    result = wait_for_fixation(on_corner, duration=100, timeout=60000)
	    if result == 'escape':
	        var.trial_aborted = 1
	        eyetracker.log('TRIAL ABORTED')
	    elif result == 'timeout':
	        eyetracker.log('CORNER TIMEOUT')
	    eyetracker.log('TRIALEND')


	def gaze_target_canvas():
	    c = Canvas(exp)
	    c.rect(GAZE_LEFT - W // 2, -GAZE_SIZE // 2, GAZE_SIZE, GAZE_SIZE,
	           fill=True, color='black')
	    return c


	# Validation: works with every tracker. Five dots; for each, the median gaze
	# position over 500 ms is compared with the dot. The error is converted to
	# degrees of visual angle with screen_width_cm and viewing_distance_cm.
	VALIDATION_POINTS = [(.5, .5), (.2, .2), (.8, .2), (.2, .8), (.8, .8)]


	def px_to_deg(px):
	    cm = px * float(var.screen_width_cm) / W
	    return math.degrees(math.atan2(cm, float(var.viewing_distance_cm)))


	def validate():
	    """Show the validation dots; returns the error per dot in degrees."""
	    eyetracker.start_recording()
	    errors = []
	    for fx, fy in VALIDATION_POINTS:
	        x, y = int(fx * W), int(fy * H)
	        c = Canvas(exp)
	        c.fixdot(x - W // 2, y - H // 2)
	        c.show()
	        eyetracker.log('VALIDATION POINT x=%d y=%d' % (x, y))
	        clock.sleep(1000)                 # time to move the eyes to the dot
	        xs, ys = [], []
	        t0 = clock.time()
	        while clock.time() - t0 < 500:
	            gx, gy = eyetracker.sample()
	            xs.append(gx)
	            ys.append(gy)
	            clock.sleep(5)
	        gx, gy = sorted(xs)[len(xs) // 2], sorted(ys)[len(ys) // 2]
	        errors.append(px_to_deg(math.hypot(gx - x, gy - y)))
	        eyetracker.log('VALIDATION ERROR x=%d y=%d deg=%.2f' % (x, y, errors[-1]))
	    eyetracker.stop_recording()
	    return errors


	def calibrate_and_validate():
	    """Validate until the experimenter accepts (Space) or re-calibrate (C).

	    Call this only while the tracker is not recording.
	    """
	    while True:
	        errors = validate()
	        mean_error, max_error = sum(errors) / len(errors), max(errors)
	        good = max_error <= float(var.validation_threshold)
	        c = Canvas(exp)
	        c.text('Validation: mean error %.2f°, max %.2f° (%s)<br /><br />'
	               'Experimenter: Space = continue, C = calibrate again'
	               % (mean_error, max_error,
	                  'good' if good else 'above %s°' % var.validation_threshold))
	        c.show()
	        key, _ = Keyboard(exp, keylist=['space', 'c'], timeout=None).get_key()
	        eyetracker.log('VALIDATION RESULT mean=%.2f max=%.2f accepted=%d'
	                       % (mean_error, max_error, key == 'space'))
	        if key == 'space':
	            var.validation_mean_error = round(mean_error, 2)
	            var.validation_max_error = round(max_error, 2)
	            return
	        eyetracker.calibrate()
	__end__

define inline_script eyelink_setup
	set description "EYELINK ONLY: Host PC drawing + Data Viewer messages (nothing on other trackers)"
	___prepare__

	__end__
	___run__
	# EYELINK ONLY. Drawing on the experimenter's screen (Host PC) and the
	# Data Viewer messages only work with an SR Research EyeLink. With any other
	# tracker this item and eyelink_trial_start/eyelink_trial_end do nothing.
	EYELINK = items['pygaze_init'].var.tracker_type == 'EyeLink'
	if not EYELINK:
	    print('EyeLink extras are off (tracker: %s)'
	          % items['pygaze_init'].var.tracker_type)

	# Trial variables that Data Viewer shows (!V TRIAL_VAR), if they exist.
	EYELINK_TRIAL_VARS = ['item', 'condition', 'response', 'correct',
	                      'trial_aborted', 'display_change_latency', 'clicked',
	                      'click_rt']

	# EyeLink Host PC colours: 0 black, 2 green, 4 red, 7 light grey, 15 white.


	def eyelink_draw_host():
	    """EyeLink only: draw the trial layout on the Host PC screen.

	    Gaze target (grey), interest areas (white boxes), boundary (red line,
	    boundary experiment only) and the corner square. The Host PC screen is
	    cleared by calibration and drift correction, so call this again after them.
	    """
	    if not EYELINK:
	        return
	    eyetracker.send_command('clear_screen 0')
	    eyetracker.send_command('draw_filled_box %d %d %d %d 7' % (
	        GAZE_LEFT, H // 2 - GAZE_SIZE // 2,
	        GAZE_LEFT + GAZE_SIZE, H // 2 + GAZE_SIZE // 2))
	    for label, left, top, right, bottom in interest_areas:
	        eyetracker.send_command('draw_box %d %d %d %d 15'
	                                % (left, top, right, bottom))
	    if 'boundary' in var:
	        eyetracker.send_command('draw_line %d 0 %d %d 4'
	                                % (var.boundary, var.boundary, H))
	    eyetracker.send_command('draw_filled_box %d %d %d %d 2' % (
	        int(W * .94), int(H * .94), int(W * .94) + CORNER_SIZE,
	        int(H * .94) + CORNER_SIZE))


	if EYELINK:
	    # Data Viewer: screen size, needed to show fixations on the stimulus.
	    eyetracker.log('DISPLAY_COORDS 0 0 %d %d' % (W - 1, H - 1))
	__end__

define inline_script eyelink_trial_start
	set description "EYELINK ONLY: TRIALID, interest areas, draw on Host PC (nothing on other trackers)"
	___prepare__

	__end__
	___run__
	# EYELINK ONLY (does nothing with other trackers). Runs after the drift
	# correction and before recording starts: marks the trial for Data Viewer,
	# defines the interest areas, and draws the layout on the Host PC.
	if EYELINK:
	    eyetracker.log('TRIALID %d' % (var.count_trial_sequence + 1))
	    for n, (label, left, top, right, bottom) in enumerate(interest_areas, 1):
	        eyetracker.log('!V IAREA RECTANGLE %d %d %d %d %d %s'
	                       % (n, left, top, right, bottom, ascii_safe(label)))
	    eyelink_draw_host()
	__end__

define inline_script eyelink_trial_end
	set description "EYELINK ONLY: TRIAL_VAR and TRIAL_RESULT messages (nothing on other trackers)"
	___prepare__

	__end__
	___run__
	# EYELINK ONLY (does nothing with other trackers). Trial variables for
	# Data Viewer, then the end-of-trial marker.
	if EYELINK:
	    for name in EYELINK_TRIAL_VARS:
	        if name in var:
	            eyetracker.log('!V TRIAL_VAR %s %s' % (name, ascii_safe(var.get(name))))
	    eyetracker.log('TRIAL_RESULT 0')
	__end__

define inline_script validate_calibration
	set description "Validate the calibration (any tracker); C = calibrate again"
	___prepare__

	__end__
	___run__
	# pygaze_init has calibrated; check the accuracy before the experiment starts.
	calibrate_and_validate()
	__end__

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "Instructions"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="En este experimento leerás frases cortas.<br /><br />Mira el cuadrado negro a la izquierda; la frase aparece cuando lo fijas con la mirada.<br /><br />Lee la frase con atención. Cuando hayas terminado, mira el pequeño cuadrado en la esquina inferior derecha.<br /><br />Después de algunas frases habrá una pregunta:<br />pulsa 1 para SÍ y 2 para NO.<br /><br />Pulsa cualquier tecla para empezar." x=0 y=0 z_index=0

define sketchpad goodbye
	set start_response_interval no
	set duration keypress
	set description "Goodbye"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="El experimento ha concluido.<br />Gracias por su participación." x=0 y=0 z_index=0

define sketchpad comprehension_question
	set start_response_interval no
	set duration 0
	set description "Comprehension question"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="{question}" x=0 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="{yes_label}" x=-128 y=64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="{no_label}" x=128 y=64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="1 = {yes_label}&nbsp;&nbsp;&nbsp;2 = {no_label}" x=0 y=160 z_index=0

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects the yes/no response"
	set correct_response "{correct_button}"
	set allowed_responses "1;2"

define sketchpad clear_screen
	set start_response_interval no
	set duration 0
	set description "Blank screen after the response"

define sketchpad end_of_practice
	set start_response_interval no
	set duration keypress
	set description "End of practice"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="Has llegado al final de la práctica.<br /><br />Si tienes alguna duda, puedes preguntar ahora al/a la investigador/a.<br /><br />Pulsa cualquier tecla para iniciar el experimento." x=0 y=0 z_index=0

define sketchpad break_instr
	set start_response_interval no
	set duration keypress
	set description "Break"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="Ahora puedes hacer una pausa.<br /><br />Pulsa cualquier tecla para continuar." x=0 y=0 z_index=0

define loop practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial_sequence
	set description "Practice trials"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if False
	set column_order "item;block;sentence_type;comma;no_comma;corrected;question;answer"
	setcycle 0 item "901"
	setcycle 0 block "practice"
	setcycle 0 sentence_type "practice"
	setcycle 0 comma "Hemos de elegir entre casa, piso o apartamento en la sierra de Teruel"
	setcycle 0 no_comma "Hemos de elegir entre casa, piso o apartamento en la sierra de Teruel"
	setcycle 0 corrected "0"
	setcycle 0 question "NA"
	setcycle 0 answer "NA"
	setcycle 1 item "902"
	setcycle 1 block "practice"
	setcycle 1 sentence_type "practice"
	setcycle 1 comma "Las autoras Marisa Moya, Carmen Romero y Paula Soto han escrito este libro."
	setcycle 1 no_comma "Las autoras Marisa Moya, Carmen Romero y Paula Soto han escrito este libro."
	setcycle 1 corrected "0"
	setcycle 1 question "NA"
	setcycle 1 answer "NA"
	setcycle 2 item "903"
	setcycle 2 block "practice"
	setcycle 2 sentence_type "practice"
	setcycle 2 comma "Pedro estudió mucho esta semana, ahora bien, es poco probable que apruebe."
	setcycle 2 no_comma "Pedro estudió mucho esta semana, ahora bien, es poco probable que apruebe."
	setcycle 2 corrected "0"
	setcycle 2 question "NA"
	setcycle 2 answer "NA"
	setcycle 3 item "904"
	setcycle 3 block "practice"
	setcycle 3 sentence_type "practice"
	setcycle 3 comma "Podríamos destacar, finalmente, que este proyecto salió mejor de lo esperado."
	setcycle 3 no_comma "Podríamos destacar, finalmente, que este proyecto salió mejor de lo esperado."
	setcycle 3 corrected "0"
	setcycle 3 question "NA"
	setcycle 3 answer "NA"
	setcycle 4 item "905"
	setcycle 4 block "practice"
	setcycle 4 sentence_type "practice"
	setcycle 4 comma "Su hermano le podía proporcionar un vehículo, pero él no sabía conducir."
	setcycle 4 no_comma "Su hermano le podía proporcionar un vehículo, pero él no sabía conducir."
	setcycle 4 corrected "0"
	setcycle 4 question "NA"
	setcycle 4 answer "NA"
	setcycle 5 item "906"
	setcycle 5 block "practice"
	setcycle 5 sentence_type "practice"
	setcycle 5 comma "Leo no se recuperó de su enfermedad, pese a haberse intentado todo."
	setcycle 5 no_comma "Leo no se recuperó de su enfermedad, pese a haberse intentado todo."
	setcycle 5 corrected "0"
	setcycle 5 question "NA"
	setcycle 5 answer "NA"
	setcycle 6 item "907"
	setcycle 6 block "practice"
	setcycle 6 sentence_type "practice"
	setcycle 6 comma "Mi prima Lola, la que es pelirroja, está estudiando en Nueva Zelanda."
	setcycle 6 no_comma "Mi prima Lola, la que es pelirroja, está estudiando en Nueva Zelanda."
	setcycle 6 corrected "0"
	setcycle 6 question "NA"
	setcycle 6 answer "NA"
	setcycle 7 item "908"
	setcycle 7 block "practice"
	setcycle 7 sentence_type "practice"
	setcycle 7 comma "Quiero celebrar una fiesta después de los exámenes, aunque con poca gente."
	setcycle 7 no_comma "Quiero celebrar una fiesta después de los exámenes, aunque con poca gente."
	setcycle 7 corrected "0"
	setcycle 7 question "NA"
	setcycle 7 answer "NA"
	run trial_sequence

define loop experimental_loop_1
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "Experimental block 1"
	set cycles 65
	set continuous no
	set break_if_on_first yes
	set break_if False
	set column_order "item;block;sentence_type;comma;no_comma;corrected;question;answer"
	setcycle 0 item "1"
	setcycle 0 block "1"
	setcycle 0 sentence_type "concesiva"
	setcycle 0 comma "Paula no podrá irse de la clase, aunque acabe el examen pronto."
	setcycle 0 no_comma "Paula no podrá irse de la clase aunque acabe el examen pronto."
	setcycle 0 corrected "0"
	setcycle 0 question "NA"
	setcycle 0 answer "NA"
	setcycle 1 item "2"
	setcycle 1 block "1"
	setcycle 1 sentence_type "concesiva"
	setcycle 1 comma "No aprobará el curso, pese a haberse esforzado el último trimestre."
	setcycle 1 no_comma "No aprobará el curso pese a haberse esforzado el último trimestre."
	setcycle 1 corrected "0"
	setcycle 1 question "¿Aprobará el curso?"
	setcycle 1 answer "NO"
	setcycle 2 item "3"
	setcycle 2 block "1"
	setcycle 2 sentence_type "concesiva"
	setcycle 2 comma "En verano habrá verbena, aunque prosigan las restricciones sanitarias."
	setcycle 2 no_comma "En verano habrá verbena aunque prosigan las restricciones sanitarias."
	setcycle 2 corrected "0"
	setcycle 2 question "NA"
	setcycle 2 answer "NA"
	setcycle 3 item "4"
	setcycle 3 block "1"
	setcycle 3 sentence_type "concesiva"
	setcycle 3 comma "Déjame entrar a ver al paciente, aunque sea un momento."
	setcycle 3 no_comma "Déjame entrar a ver al paciente aunque sea un momento."
	setcycle 3 corrected "0"
	setcycle 3 question "NA"
	setcycle 3 answer "NA"
	setcycle 4 item "5"
	setcycle 4 block "1"
	setcycle 4 sentence_type "concesiva"
	setcycle 4 comma "Me resulta difícil ser constante, aunque me guste mucho estudiar."
	setcycle 4 no_comma "Me resulta difícil ser constante aunque me guste mucho estudiar."
	setcycle 4 corrected "0"
	setcycle 4 question "NA"
	setcycle 4 answer "NA"
	setcycle 5 item "6"
	setcycle 5 block "1"
	setcycle 5 sentence_type "concesiva"
	setcycle 5 comma "Sigo sin entenderlo bien, pese a que la maestra lo haya explicado dos veces."
	setcycle 5 no_comma "Sigo sin entenderlo bien pese a que la maestra lo haya explicado dos veces."
	setcycle 5 corrected "0"
	setcycle 5 question "¿Me cuesta entenderlo?"
	setcycle 5 answer "SI"
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	setcycle 18 item "19"
	setcycle 18 block "1"
	setcycle 18 sentence_type "concesiva"
	setcycle 18 comma "Su comida estaba deliciosa, aun llevando muy pocas especias y sal."
	setcycle 18 no_comma "Su comida estaba deliciosa aun llevando muy pocas especias y sal."
	setcycle 18 corrected "1"
	setcycle 18 question "¿Utilizaba muchas especias para cocinar?"
	setcycle 18 answer "NO"
	setcycle 19 item "20"
	setcycle 19 block "1"
	setcycle 19 sentence_type "adversativa"
	setcycle 19 comma "Le dijo que era necesario estudiar, aunque no era lo que quería escuchar."
	setcycle 19 no_comma "Le dijo que era necesario estudiar aunque no era lo que quería escuchar."
	setcycle 19 corrected "0"
	setcycle 19 question "NA"
	setcycle 19 answer "NA"
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	setcycle 28 item "29"
	setcycle 28 block "1"
	setcycle 28 sentence_type "adversativa"
	setcycle 28 comma "Sus padres se enfadaron muchísimo, pero pronto se les pasará."
	setcycle 28 no_comma "Sus padres se enfadaron muchísimo pero pronto se les pasará."
	setcycle 28 corrected "0"
	setcycle 28 question "¿Estaban sus padres contentos?"
	setcycle 28 answer "NO"
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	setcycle 31 item "32"
	setcycle 31 block "1"
	setcycle 31 sentence_type "adversativa"
	setcycle 31 comma "Está lloviendo mucho, pero al menos no hace tanto calor."
	setcycle 31 no_comma "Está lloviendo mucho pero al menos no hace tanto calor."
	setcycle 31 corrected "0"
	setcycle 31 question "¿Hace más fresco ahora?"
	setcycle 31 answer "SI"
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	setcycle 52 item "53"
	setcycle 52 block "1"
	setcycle 52 sentence_type "conectores"
	setcycle 52 comma "Siempre se le veía entrenando y, finalmente, consiguió ganar el campeonato."
	setcycle 52 no_comma "Siempre se le veía entrenando y finalmente consiguió ganar el campeonato."
	setcycle 52 corrected "0"
	setcycle 52 question "NA"
	setcycle 52 answer "NA"
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	setcycle 58 item "59"
	setcycle 58 block "1"
	setcycle 58 sentence_type "conectores"
	setcycle 58 comma "Pedro falsificó sus calificaciones y, por ende, fue expulsado de la facultad."
	setcycle 58 no_comma "Pedro falsificó sus calificaciones y por ende fue expulsado de la facultad."
	setcycle 58 corrected "0"
	setcycle 58 question "¿Expulsaron a Pedro por golpear a un compañero?"
	setcycle 58 answer "NO"
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	setcycle 63 item "64"
	setcycle 63 block "1"
	setcycle 63 sentence_type "conectores"
	setcycle 63 comma "Juan estudió magisterio y, posteriormente, se sacó psicología."
	setcycle 63 no_comma "Juan estudió magisterio y posteriormente se sacó psicología."
	setcycle 63 corrected "0"
	setcycle 63 question "¿Juan estudió psicología?"
	setcycle 63 answer "SI"
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	run trial_sequence

define loop experimental_loop_2
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "Experimental block 2"
	set cycles 65
	set continuous no
	set break_if_on_first yes
	set break_if False
	set column_order "item;block;sentence_type;comma;no_comma;corrected;question;answer"
	setcycle 0 item "66"
	setcycle 0 block "2"
	setcycle 0 sentence_type "conectores"
	setcycle 0 comma "Le dieron una beca y, por eso, está en la universidad."
	setcycle 0 no_comma "Le dieron una beca y por eso está en la universidad."
	setcycle 0 corrected "0"
	setcycle 0 question "NA"
	setcycle 0 answer "NA"
	setcycle 1 item "67"
	setcycle 1 block "2"
	setcycle 1 sentence_type "conectores"
	setcycle 1 comma "Es muy indeciso y, por ello, duda mucho de lo que hace."
	setcycle 1 no_comma "Es muy indeciso y por ello duda mucho de lo que hace."
	setcycle 1 corrected "0"
	setcycle 1 question "¿Es una persona segura?"
	setcycle 1 answer "NO"
	setcycle 2 item "68"
	setcycle 2 block "2"
	setcycle 2 sentence_type "conectores"
	setcycle 2 comma "Viajamos el mes que viene a Corea y, de hecho, tenemos ya los billetes."
	setcycle 2 no_comma "Viajamos el mes que viene a Corea y de hecho tenemos ya los billetes."
	setcycle 2 corrected "0"
	setcycle 2 question "NA"
	setcycle 2 answer "NA"
	setcycle 3 item "69"
	setcycle 3 block "2"
	setcycle 3 sentence_type "conectores"
	setcycle 3 comma "Empezamos el viaje temprano y, por fin, llegamos a nuestro destino."
	setcycle 3 no_comma "Empezamos el viaje temprano y por fin llegamos a nuestro destino."
	setcycle 3 corrected "0"
	setcycle 3 question "NA"
	setcycle 3 answer "NA"
	setcycle 4 item "70"
	setcycle 4 block "2"
	setcycle 4 sentence_type "conectores"
	setcycle 4 comma "No puedo soportarles, es más, preferiría no volverlos a ver."
	setcycle 4 no_comma "No puedo soportarles es más preferiría no volverlos a ver."
	setcycle 4 corrected "0"
	setcycle 4 question "¿Me caen mal?"
	setcycle 4 answer "SI"
	setcycle 5 item "71"
	setcycle 5 block "2"
	setcycle 5 sentence_type "conectores"
	setcycle 5 comma "Te he dicho que no lo alquilaremos, es decir, olvídate de ello."
	setcycle 5 no_comma "Te he dicho que no lo alquilaremos es decir olvídate de ello."
	setcycle 5 corrected "0"
	setcycle 5 question "NA"
	setcycle 5 answer "NA"
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	setcycle 13 item "79"
	setcycle 13 block "2"
	setcycle 13 sentence_type "enumeraciones"
	setcycle 13 comma "Este año hemos viajado a Bruselas, Lanzarote y Toledo y nos ha gustado mucho."
	setcycle 13 no_comma "Este año hemos viajado a Bruselas Lanzarote y Toledo y nos ha gustado mucho."
	setcycle 13 corrected "0"
	setcycle 13 question "¿Nos hemos quedado en casa estas vacaciones?"
	setcycle 13 answer "NO"
	setcycle 14 item "80"
	setcycle 14 block "2"
	setcycle 14 sentence_type "enumeraciones"
	setcycle 14 comma "Han de traer disfraces de sol, de luna o de nube para la representación."
	setcycle 14 no_comma "Han de traer disfraces de sol de luna o de nube para la representación."
	setcycle 14 corrected "0"
	setcycle 14 question "¿Es necesario traer disfraces?"
	setcycle 14 answer "SI"
	setcycle 15 item "81"
	setcycle 15 block "2"
	setcycle 15 sentence_type "enumeraciones"
	setcycle 15 comma "Solo necesito a mis padres, hermanos y abuelos para vivir."
	setcycle 15 no_comma "Solo necesito a mis padres hermanos y abuelos para vivir."
	setcycle 15 corrected "0"
	setcycle 15 question "NA"
	setcycle 15 answer "NA"
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	setcycle 39 item "105"
	setcycle 39 block "2"
	setcycle 39 sentence_type "incisos"
	setcycle 39 comma "Mis dos tortugas, Paula y Alba, tienen más de siete años."
	setcycle 39 no_comma "Mis dos tortugas Paula y Alba tienen más de siete años."
	setcycle 39 corrected "0"
	setcycle 39 question "NA"
	setcycle 39 answer "NA"
	setcycle 40 item "106"
	setcycle 40 block "2"
	setcycle 40 sentence_type "incisos"
	setcycle 40 comma "Los helados veganos, especialmente los que venden en Consum, están muy buenos."
	setcycle 40 no_comma "Los helados veganos especialmente los que venden en Consum están muy buenos."
	setcycle 40 corrected "0"
	setcycle 40 question "¿Están buenos esos helados?"
	setcycle 40 answer "SI"
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	setcycle 44 item "110"
	setcycle 44 block "2"
	setcycle 44 sentence_type "incisos"
	setcycle 44 comma "Nuestra barriada, según mi padre, era peligrosísima hasta hace pocos años."
	setcycle 44 no_comma "Nuestra barriada según mi padre era peligrosísima hasta hace pocos años."
	setcycle 44 corrected "0"
	setcycle 44 question "¿Era segura nuestra zona hace unos años?"
	setcycle 44 answer "NO"
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	run trial_sequence

define inline_script setup_condition
	set description "Set the correct response button"
	___prepare__
	if var.answer in ('SI', 'YES'):
	    var.correct_button = '1'
	elif var.answer == 'NO':
	    var.correct_button = '2'
	else:
	    var.correct_button = 'NA'
	# Avoid stale values from the previous trial when the question is skipped.
	var.response = 'NA'
	var.correct = 'NA'
	var.response_time = 'NA'
	var.trial_aborted = 0
	__end__
	___run__

	__end__

define inline_script prepare_trial
	set description "Prepare the trial canvases and interest areas"
	___prepare__
	var.item_list = 'A' if var.subject_parity == 'even' else 'B'
	if var.block == 'practice':
	    var.condition = 'practice'
	    var.sentence = var.comma
	else:
	    odd_item = int(var.item) % 2 == 1
	    with_comma = odd_item if var.item_list == 'A' else not odd_item
	    var.condition = 'comma' if with_comma else 'no_comma'
	    var.sentence = var.comma if with_comma else var.no_comma
	sentence_canvas = text_canvas(var.sentence)
	letter_x = letter_edges(var.sentence)
	interest_areas = word_areas(var.sentence, letter_x)
	__end__
	___run__

	__end__

define inline_script show_gaze_target
	set description "Show the gaze-contingent target; C = re-calibrate"
	___prepare__
	gazetarget_canvas = gaze_target_canvas()
	__end__
	___run__
	while True:
	    gazetarget_canvas.show()
	    eyetracker.log('GAZE TARGET ON')
	    result = wait_for_fixation(on_gaze_target, duration=250, timeout=10000,
	                               keys=('escape', 'c'))
	    if result == 'fixated':
	        break
	    eyetracker.stop_recording()          # (re)calibration needs recording off
	    if result == 'c':
	        eyetracker.log('GAZE TARGET RECALIBRATION')
	        eyetracker.calibrate()
	        calibrate_and_validate()
	    else:
	        eyetracker.log('GAZE TARGET %s: drift correction' % result.upper())
	        eyetracker.drift_correction(
	            fix_triggered=var.fixation_triggered_drift_check == 'yes')
	    eyelink_draw_host()                  # EyeLink only; nothing otherwise
	    eyetracker.start_recording()
	__end__

define inline_script trial_display
	set description "Show the stimulus and end the trial"
	___prepare__

	__end__
	___run__
	sentence_canvas.show()
	eyetracker.log('STIMONSET')
	log_interest_areas()
	end_trial_at_corner()
	__end__

